{
  "deck" : {
    "p200-rack" : {
      "labware" : "tiprack-200ul"
    },
    "p20-rack" : {
      "labware" : "tiprack-200ul"
    },
    "trough": {
      "labware": "trough-12row"
    },
    "plate-1": {
      "labware": "96-flat"
    },
    "plate-2": {
      "labware": "96-flat"
    },
    "plate-3": {
      "labware": "96-flat"
    },
    "trash": {
      "labware": "point"
    }
  },
  "head" : {
    "p200" : {
      "tool" : "pipette",
      "tip-racks" : [
        {
          "container" : "p200-rack"
        }
      ],
      "trash-container" : {
        "container" : "trash"
      },
      "multi-channel" : true,
      "axis" : "a",
      "volume" : 200,
      "down-plunger-speed" : 300,
      "up-plunger-speed" : 500,
      "tip-plunge" : 8,
      "extra-pull-volume" : 20,
      "extra-pull-delay" : 0.2,
      "distribute-percentage" : 0.1,
      "points" : [
        {
          "f1" : 10,
          "f2" : 6
        },
        {
          "f1" : 25,
          "f2" : 23
        },
        {
          "f1" : 50,
          "f2" : 49
        },
        {
          "f1" : 200,
          "f2" : 200
        }
      ]
    },
    "p20" : {
      "tool" : "pipette",
      "tip-racks" : [
        {
          "container" : "p20-rack"
        }
      ],
      "trash-container" : {
        "container" : "trash"
      },
      "multi-channel" : false,
      "axis" : "b",
      "volume" : 20,
      "down-plunger-speed" : 300,
      "up-plunger-speed" : 500,
      "tip-plunge" : 5,
      "extra-pull-volume" : 1,
      "extra-pull-delay" : 0.2,
      "distribute-percentage" : 0.1,
      "points" : [
        {
          "f1" : 1,
          "f2" : 0.6
        },
        {
          "f1" : 2.5,
          "f2" : 2.3
        },
        {
          "f1" : 5.0,
          "f2" : 4.9
        },
        {
          "f1" : 15.0,
          "f2" : 15.0
        }
      ]
    }
  },


  "ingredients" : {
  },


  "instructions": [
    {
      "tool": "p200",
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "container": "trough",
                "location": "A1",
                "tip-offset": -2,
                "delay" : 2,
                "touch-tip" : true
              },
              "to": {
                "container": "plate-1",
                "location": "A1",
                "touch-tip" : true
              },
              "volume": 100,
              "blowout" : true,
              "extra-pull" : true
            }
          ]
        },
        {
          "distribute":
          {
            "from": {
              "container": "trough",
              "location": "A1"
            },
            "to": [
              {
                "container": "plate-2",
                "location": "A2",
                "volume" : 20,
                "touch-tip" : true
              },
              {
                "container": "plate-2",
                "location": "A3",
                "volume" : 30,
                "touch-tip" : true
              },
              {
                "container": "plate-2",
                "location": "A4",
                "volume" : 100,
                "touch-tip" : true
              }
            ],
            "blowout" : true
          }
        },
        {
          "consolidate":
          {
            "from": [
              {
                "container": "plate-2",
                "location": "A2",
                "volume" : 20,
                "touch-tip" : true
              },
              {
                "container": "plate-2",
                "location": "A3",
                "volume" : 30,
                "touch-tip" : true
              },
              {
                "container": "plate-2",
                "location": "A4",
                "volume" : 100,
                "touch-tip" : true
              }
            ],
            "to": {
              "container": "plate-3",
              "location": "A5",
              "touch-tip" : true
            },
            "blowout" : true
          }
        },
        {
          "mix": [
            {
              "container": "plate-1",
              "location": "A5",
              "volume" : 100,
              "repetitions" : 5,
              "blowout" : true,
              "liquid-tracking" : true
            }
          ]
        }
      ]
    },
    {
      "tool": "p20",
      "groups": [
        {
          "transfer": [
            {
              "from": {
                "container": "trough",
                "location": "A1",
                "tip-offset": -2,
                "delay" : 2,
                "touch-tip" : true
              },
              "to": {
                "container": "plate-1",
                "location": "A1",
                "touch-tip" : true
              },
              "volume": 10,
              "blowout" : true,
              "extra-pull" : true
            }
          ]
        },
        {
          "distribute":
          {
            "from": {
              "container": "trough",
              "location": "A1"
            },
            "to": [
              {
                "container": "plate-2",
                "location": "A2",
                "volume" : 2,
                "touch-tip" : true
              },
              {
                "container": "plate-2",
                "location": "A3",
                "volume" : 3,
                "touch-tip" : true
              },
              {
                "container": "plate-2",
                "location": "A4",
                "volume" : 10,
                "touch-tip" : true
              }
            ],
            "blowout" : true
          }
        },
        {
          "consolidate":
          {
            "from": [
              {
                "container": "plate-2",
                "location": "A2",
                "volume" : 2,
                "touch-tip" : true
              },
              {
                "container": "plate-2",
                "location": "A3",
                "volume" : 3,
                "touch-tip" : true
              },
              {
                "container": "plate-2",
                "location": "A4",
                "volume" : 10,
                "touch-tip" : true
              }
            ],
            "to": {
              "container": "plate-3",
              "location": "A5",
              "touch-tip" : true
            },
            "blowout" : true
          }
        },
        {
          "mix": [
            {
              "container": "plate-1",
              "location": "A5",
              "volume" : 10,
              "repetitions" : 5,
              "blowout" : true,
              "liquid-tracking" : true
            }
          ]
        }
      ]
    }
  ]
}
