{
  "head": {
    "one": {
      "tip-racks": [{
        "container": "rack"
      }],
      "trash-container": {
        "container": "rack"
      },
      "multi-channel": true,
      "axis": "b",
      "volume": 200,
      "down-plunger-speed": 300,
      "up-plunger-speed": 500,
      "tip-plunge": 8,
      "extra-pull-volume": 20,
      "extra-pull-delay": 0.2,
      "distribute-percentage": 0.1,
      "points": [{
        "f1": 10,
        "f2": 6
      }, {
        "f1": 25,
        "f2": 23
      }, {
        "f1": 50,
        "f2": 49
      }, {
        "f1": 200,
        "f2": 200
      }],
      "tool": "pipette"
    }
  },
  "deck": {
    "rack": {
      "labware": "tiprack-200ul"
    },
    "eae": {
      "labware": "trough-12row"
    }
  },
  "instructions": [{
    "tool": "one",
    "groups": [{
      "mix": [{
        "container": "eae",
        "volume": 100,
        "location": "A1",
        "repetitions": 5
      }]
    }]
  }]
}
