{
  "head": {
    "pipette": {
      "tip-racks": [{
        "container": "tiprack"
      }],
      "trash-container": {
        "container": "tiprack"
      },
      "multi-channel": false,
      "axis": "b",
      "volume": 200,
      "down-plunger-speed": 300,
      "up-plunger-speed": 500,
      "tip-plunge": 8,
      "extra-pull-volume": 20,
      "extra-pull-delay": 0.2,
      "distribute-percentage": 0.1,
      "points": [{
        "f1": 10,
        "f2": 6
      }, {
        "f1": 25,
        "f2": 23
      }, {
        "f1": 50,
        "f2": 49
      }, {
        "f1": 200,
        "f2": 200
      }],
      "tool": "pipette"
    }
  },
  "deck": {
    "tiprack": {
      "labware": "tiprack-200ul"
    },
    "secondtrough": {
      "labware": "trough-12row"
    },
    "troughhh": {
      "labware": "trough-12row"
    }
  },
  "instructions": [{
    "tool": "pipette",
    "groups": [{
      "distribute": {
        "blowout": true,
        "from": {
          "tip-offset": -2,
          "delay": 2,
          "touch-tip": true,
          "location": 0,
          "container": "troughhh"
        },
        "to": [{
          "container": "secondtrough",
          "location": 0,
          "volume": 100,
          "touch-tip": true
        }, {
          "container": "secondtrough",
          "location": 1,
          "volume": 100,
          "touch-tip": true
        }]
      }
    }]
  }]
}
